PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = RepSup
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine IntroRoutine
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    TextComponent IntroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        BlaBlaBla
        (spare ich mir, da nicht durchgeführt)
    KeyboardComponent IntroResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrialRoutine
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    ImageComponent TrialImage
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ParallelOutComponent p_port
      address = 0x0378
      durationEstim = $eegTrig
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 1.5
      syncScreen = True
      syncScreenRefresh = False
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  Routine TrialFixation
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    PolygonComponent TrialFixationPoint
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = $fix_duration
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  Routine InterStimulusInterval
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine OutroRoutine
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    TextComponent OutroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        BlaBlaBla

        Press 'space' to exit the experiment.
    KeyboardComponent OutroResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fragen
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    TextComponent FragenSagehorn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sehr geehrte Frau Sagehorn,
        ich habe ein paar Fragen dazu - insbesondere danach ob meine Umsetzung korrekt ist - bei mir bricht das Programm mit der unten stehenden Meldung ab - nach meinem Verständnis fehlt hier nur der EEG-Port - somit kann ich aber auch nicht weiter prüfen.
        Meine Zusammenstellung:
        - der Ordner wie beschrieben
        - in "lists" das .py Dokument was wir zusammen in der Einheit erarbeitet hatten
        - in "stimuli" die 240 Bilddateien
        - "data" ist leer

        Ich habe auch den folgenden Teil aus den Conditions beim Trial Loop entfernt "+ expInfo['participant'] + '.csv'" - erst danach wurde bei mir der Pfad erkannt. Passt das so, oder muss ich etwas anpassen?

        Die gespeicherten Dateien entsprechen dem Format: "1_RepSup"

        6.4725     WARNING     psychopy.parallel has been imported but no parallel port driver found. Install either inpout32, inpoutx64 or dlportio
        Traceback (most recent call last):
        17.3870     WARNING     launchHubServer: If using the iohub mouse or eyetracker devices, fullScr should be True.
          File "C:\Users\sebas\Documents\PsychoPy\Repetition_Suppression\RepSup_lastrun.py", line 1248, in <module>
            run(
          File "C:\Users\sebas\Documents\PsychoPy\Repetition_Suppression\RepSup_lastrun.py", line 404, in run
            p_port = parallel.ParallelPort(address='0x0378')
        TypeError: 'NoneType' object is not callable
        2.2332     WARNING     Monitor specification not found. Creating a temporary one...
        ioHub Server Process Completed With Code:  0
        ################ Experiment ended with exit code 1 [pid:35932] #################
Flow
  Routine Fragen
  Routine IntroRoutine
  LoopInitiator TrialLoop loopType="TrialHandler"
    conditionsFile = /Users/sebas/Documents/PsychoPy/Repetition_Suppression/lists/08_RS_Lists
    loopType = sequential
    nReps = 1
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    Routine TrialFixation
    Routine TrialRoutine
    Routine InterStimulusInterval
  LoopTerminator TrialLoop
  Routine OutroRoutine
