PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s' % (expInfo['participant'], expName) 
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 960]
  colPriority = {'type': 'priority.HIGH', 'imageFile': 'priority.HIGH', 'corrAns': 'priority.HIGH', 'TrialResp.keys': 'priority.HIGH', 'TrialResp.corr': 'priority.HIGH'}
  color = darkgrey
  consoleLoggingLevel = debug
  expName = go_nogo_task
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
  sortColumns = priority
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Routines
  Routine TrialIntro
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    TextComponent IntroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        BlaBlaBla

        (Text neu eingeben)
    KeyboardComponent IntroResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrialRoutine
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    ImageComponent TrialImage
      image [set every repeat] = $imageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TrialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine TrialOutro
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    TextComponent OutroText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        BlaBlaBla

        (Text neu eingeben)
    KeyboardComponent OutroResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Delay
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Get Ready!
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Flow
  Routine TrialIntro
  Routine Delay
  LoopInitiator TrialLoop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'type': 'go', 'imageFile': 'stimuli/11.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/12.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/13.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/14.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/15.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/16.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/17.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/18.png', 'corrAns': 'space'},
      {'type': 'go', 'imageFile': 'stimuli/19.png', 'corrAns': 'space'},
      {'type': 'nogo', 'imageFile': 'stimuli/21.png', 'corrAns': None},
      {'type': 'nogo', 'imageFile': 'stimuli/22.png', 'corrAns': None},
      {'type': 'nogo', 'imageFile': 'stimuli/23.png', 'corrAns': None}]
    Routine TrialRoutine
  LoopTerminator TrialLoop
  Routine TrialOutro
